<?xml version='1.0' encoding='utf-8'?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:dc="http://purl.org/dc/elements/1.1/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xmlns:bqs="http://www.cellml.org/bqs/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:dcterms="http://purl.org/dc/terms/" xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" cmeta:id="renal_Na_H_exchanger_model_version02" name="chang_fujita_2001_version03" xml:base="http://models.cellml.org/workspace/chang_fujita_2001/xmlbase/7b541c56bf5189690e6669206f6c91646e835eda/">
<documentation xmlns="http://cellml.org/tmp-documentation">
<article>
  <articleinfo>
  <title>Mathematical Models of Ionic Transport in the Distal Tubule of the Rat</title>
  <author>
    <firstname>Catherine</firstname>
          <surname>Lloyd</surname>
    <affiliation>
      <shortaffil>Bioengineering Institute, University of Auckland</shortaffil>
    </affiliation>
  </author>
</articleinfo>
  <section id="sec_status">
    <title>Model Status</title>
    <para>
            This CellML model is a description of Chang and Fujita's 2001 mathematical model of a Na-H exchanger in the distal tubule of the rat: it is one component of an overall model of acid/base transport in a distal tubule.
          </para>
  </section>
  <sect1 id="sec_structure">
<title>Model Structure</title>

<para>
Acid-base transport in the rat distal tubule of the kidney has been extensively studied by a variety of different experimental methods.  These experiments have shown that in the early part of the distal tubule, H<superscript>+</superscript> is secreted into the tubular fluid via a Na/H exchanger embedded in the luminal membrane (see <xref linkend="fig_reaction_diagram1"/> below).  Closely linked with this process is the transport of HCO<subscript>3</subscript>
          <superscript>-</superscript> out of the cytosolic space into the basolateral space.  This probably occurs via an anion exchanger.  In the late distal tubule, distinct cell types called intercalated cells are present.  These cells are specifically involved in acid-base transport.  Type A cells secrete H<superscript>+</superscript> via a luminal H-ATPase, and they extrude HCO<subscript>3</subscript>
          <superscript>-</superscript> via a basolateral anion exchanger.  Type B cells have anion transporters on their opposite side, and they function to secrete HCO<subscript>3</subscript>
          <superscript>-</superscript> into the tubular fluid.    
</para>

<para>
The complete original paper reference is cited below:
</para>

<para>
<ulink url="http://ajprenal.physiology.org/cgi/content/abstract/281/2/F222">A numerical model of acid-base transport in rat distal tubule</ulink>, Hangil Chang and Toshiro Fujita, 2001, <ulink url="http://ajpcon.physiology.org/">
            <emphasis>American Journal of Physiology</emphasis>
          </ulink>, 281, F222-F243. (<ulink url="http://ajprenal.physiology.org/cgi/reprint/281/2/F222.pdf">PDF</ulink> and <ulink url="http://ajprenal.physiology.org/cgi/content/full/281/2/F222">text</ulink> versions of the article are available to Journal subscribers.  <ulink url="http://www.ncbi.nlm.nih.gov/entrez/query.fcgi?cmd=Retrieve&amp;db=PubMed&amp;list_uids=11457714&amp;dopt=Abstract">PubMed ID: 11457714</ulink>) 
</para>

<informalfigure float="0" id="fig_reaction_diagram1">
<mediaobject>
  <imageobject>
    <objectinfo>
      <title>reaction_diagram1</title>
    </objectinfo>
    <imagedata fileref="chang_2001a.png"/>
  </imageobject>
</mediaobject>
<caption>State diagram of the Na-H exchanger.  In this model, the Na-H exchanger has a single binding site (E) to which Na<superscript>+</superscript>, H<superscript>+</superscript>, and NH<subscript>4</subscript>
            <superscript>+</superscript> bind competitively.  Only the bound forms of the transporter are able to cross the membrane.  (Symbols with the asterisk (*) represent conformations facing the cytosol, symbols without indicate conformations facing the extracellular environment.)</caption>
</informalfigure>


</sect1>
</article>
</documentation>
  


  
  
  
   <units name="millimolar">
     <unit units="mole" prefix="milli"/>
     <unit units="litre" exponent="-1"/>
   </units>
   
   <units name="micromolar">
     <unit units="mole" prefix="micro"/>
     <unit units="litre" exponent="-1"/>
   </units>

   <units name="first_order_rate_constant">
     <unit units="second" exponent="-1"/>
   </units>

   <units name="second_order_rate_constant">
     <unit units="millimolar" exponent="-1"/>
     <unit units="second" exponent="-1"/>
   </units>
   
   <component name="environment">
      <variable units="second" public_interface="out" name="time"/>
   </component>
   
   
  <component cmeta:id="E" name="E">
     
    <variable units="millimolar" public_interface="out" name="E"/>
      
    <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k2"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k4"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k5"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k6"/>
    <variable units="millimolar" public_interface="in" name="ENa"/>
    <variable units="millimolar" public_interface="in" name="ENH4"/>
    <variable units="millimolar" public_interface="in" name="EH"/>
    <variable units="millimolar" public_interface="in" name="H"/>
    <variable units="millimolar" public_interface="in" name="Na"/>
    <variable units="millimolar" public_interface="in" name="NH4"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> E </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/> 
              <ci> k2 </ci>
              <ci> ENa </ci>
            </apply>
            <apply>
              <times/>
              <ci> k4 </ci>
              <ci> EH </ci>
            </apply>
            <apply>
              <times/> 
              <ci> k6 </ci>
              <ci> ENH4 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k1 </ci>
              <ci> Na </ci>
              <ci> E </ci>
            </apply>
            <apply>
              <times/>
              <ci> k3 </ci>
              <ci> H </ci>
              <ci> E </ci>
            </apply>
            <apply>
              <times/>
              <ci> k5 </ci>
              <ci> NH4 </ci>
              <ci> E </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
   
  <component cmeta:id="ENa" name="ENa">
     
    <variable units="millimolar" public_interface="out" name="ENa"/>
      
    <variable units="second_order_rate_constant" public_interface="in" name="k1"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k2"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k13"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k14"/>
    <variable units="millimolar" public_interface="in" name="ENa_"/>
    <variable units="millimolar" public_interface="in" name="E"/>
    <variable units="millimolar" public_interface="in" name="Na"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> ENa </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/> 
              <ci> k1 </ci>
              <ci> E </ci>
              <ci> Na </ci>
            </apply>
            <apply>
              <times/>
              <ci> k14 </ci>
              <ci> ENa_ </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k2 </ci>
              <ci> ENa </ci>
            </apply>
            <apply>
              <times/>
              <ci> k13 </ci>
              <ci> ENa </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
   
  <component cmeta:id="EH" name="EH">
     
    <variable units="millimolar" public_interface="out" name="EH"/>
      
    <variable units="second_order_rate_constant" public_interface="in" name="k3"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k4"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k15"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k16"/>
    <variable units="millimolar" public_interface="in" name="EH_"/>
    <variable units="millimolar" public_interface="in" name="E"/>
    <variable units="millimolar" public_interface="in" name="H"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> EH </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/> 
              <ci> k3 </ci>
              <ci> H </ci>
              <ci> E </ci>
            </apply>
            <apply>
              <times/>
              <ci> k16 </ci>
              <ci> EH_ </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k4 </ci>
              <ci> EH </ci>
            </apply>
            <apply>
              <times/>
              <ci> k15 </ci>
              <ci> EH </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
   
  <component cmeta:id="ENH4" name="ENH4">
     
    <variable units="millimolar" public_interface="out" name="ENH4"/>
      
    <variable units="second_order_rate_constant" public_interface="in" name="k5"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k6"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k17"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k18"/>
    <variable units="millimolar" public_interface="in" name="ENH4_"/>
    <variable units="millimolar" public_interface="in" name="E"/>
    <variable units="millimolar" public_interface="in" name="NH4"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> ENH4 </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/> 
              <ci> k5 </ci>
              <ci> NH4 </ci>
              <ci> E </ci>
            </apply>
            <apply>
              <times/>
              <ci> k18 </ci>
              <ci> ENH4_ </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k6 </ci>
              <ci> ENH4 </ci>
            </apply>
            <apply>
              <times/>
              <ci> k17 </ci>
              <ci> ENH4 </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
   
   <component cmeta:id="E_" name="E_">
     
    <variable units="millimolar" public_interface="out" name="E_"/>
      
    <variable units="second_order_rate_constant" public_interface="in" name="k7"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k8"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k9"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k10"/>
    <variable units="second_order_rate_constant" public_interface="in" name="k11"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k12"/>
    <variable units="millimolar" public_interface="in" name="ENa_"/>
    <variable units="millimolar" public_interface="in" name="ENH4_"/>
    <variable units="millimolar" public_interface="in" name="EH_"/>
    <variable units="millimolar" public_interface="in" name="H_"/>
    <variable units="millimolar" public_interface="in" name="Na_"/>
    <variable units="millimolar" public_interface="in" name="NH4_"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> E_ </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/> 
              <ci> k8 </ci>
              <ci> ENa_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k10 </ci>
              <ci> EH_ </ci>
            </apply>
            <apply>
              <times/> 
              <ci> k12 </ci>
              <ci> ENH4_ </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k7 </ci>
              <ci> Na_ </ci>
              <ci> E_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k9 </ci>
              <ci> H_ </ci>
              <ci> E_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k11 </ci>
              <ci> NH4_ </ci>
              <ci> E_ </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
   
  <component cmeta:id="ENa_" name="ENa_">
     
    <variable units="millimolar" public_interface="out" name="ENa_"/>
      
    <variable units="second_order_rate_constant" public_interface="in" name="k7"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k8"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k13"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k14"/>
    <variable units="millimolar" public_interface="in" name="ENa"/>
    <variable units="millimolar" public_interface="in" name="E_"/>
    <variable units="millimolar" public_interface="in" name="Na_"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> ENa_ </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/> 
              <ci> k7 </ci>
              <ci> E_ </ci>
              <ci> Na_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k13 </ci>
              <ci> ENa </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k8 </ci>
              <ci> ENa_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k14 </ci>
              <ci> ENa_ </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
   
  <component cmeta:id="EH_" name="EH_">
     
    <variable units="millimolar" public_interface="out" name="EH_"/>
      
    <variable units="second_order_rate_constant" public_interface="in" name="k9"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k10"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k15"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k16"/>
    <variable units="millimolar" public_interface="in" name="EH"/>
    <variable units="millimolar" public_interface="in" name="E_"/>
    <variable units="millimolar" public_interface="in" name="H_"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> EH_ </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/> 
              <ci> k9 </ci>
              <ci> H_ </ci>
              <ci> E_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k15 </ci>
              <ci> EH </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k10 </ci>
              <ci> EH_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k16 </ci>
              <ci> EH_ </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
   
  <component cmeta:id="ENH4_" name="ENH4_">
     
    <variable units="millimolar" public_interface="out" name="ENH4_"/>
      
    <variable units="second_order_rate_constant" public_interface="in" name="k11"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k12"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k17"/>
    <variable units="first_order_rate_constant" public_interface="in" name="k18"/>
    <variable units="millimolar" public_interface="in" name="ENH4"/>
    <variable units="millimolar" public_interface="in" name="E_"/>
    <variable units="millimolar" public_interface="in" name="NH4_"/>
    <variable units="second" public_interface="in" name="time"/> 
    
    <math xmlns="http://www.w3.org/1998/Math/MathML"> 
      <apply>
        <eq/> 
        <apply>
          <diff/> 
          <bvar>
            <ci>time</ci>
          </bvar> 
          <ci> ENH4_ </ci> 
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/> 
              <ci> k11 </ci>
              <ci> NH4_ </ci>
              <ci> E_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k17 </ci>
              <ci> ENH4 </ci>
            </apply>
          </apply>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci> k12 </ci>
              <ci> ENH4_ </ci>
            </apply>
            <apply>
              <times/>
              <ci> k18 </ci>
              <ci> ENH4_ </ci>
            </apply>
          </apply>
        </apply>  
      </apply> 
    </math> 
  </component>
   
  <component name="reaction_constants">
    <variable units="second_order_rate_constant" public_interface="out" name="k1" initial_value="1.0E8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k2" initial_value="3.27E6"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k3" initial_value="1.0E8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k4" initial_value="3.52E0"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k5" initial_value="1.0E8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k6" initial_value="7.13E5"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k7" initial_value="1.0E8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k8" initial_value="3.27E6"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k9" initial_value="1.0E8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k10" initial_value="3.52E0"/>
    <variable units="second_order_rate_constant" public_interface="out" name="k11" initial_value="1.0E8"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k12" initial_value="7.13E5"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k13"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k14"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k15"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k16"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k17"/>
    <variable units="first_order_rate_constant" public_interface="out" name="k18"/>
    <variable units="millimolar" public_interface="out" name="H" initial_value="1.0"/>
    <variable units="millimolar" public_interface="out" name="Na" initial_value="1.0"/>
    <variable units="millimolar" public_interface="out" name="NH4" initial_value="1.0"/>
    <variable units="millimolar" public_interface="out" name="H_" initial_value="1.0"/>
    <variable units="millimolar" public_interface="out" name="Na_" initial_value="9.5"/>
    <variable units="millimolar" public_interface="out" name="NH4_" initial_value="1.3"/>
    
    <variable units="dimensionless" name="W"/>
    <variable units="micromolar" name="KH" initial_value="1.0"/>
      
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply id="W_calculation">
        <eq/>
        <ci> W </ci>
        <apply>
          <divide/>
          <ci> H_ </ci>
          <apply>
            <plus/>
            <ci> H_ </ci>
            <ci> KH </ci>
          </apply>
        </apply>
      </apply>

      <apply id="k13_calculation">
        <eq/>
        <ci> k13 </ci>
        <apply>
          <times/>
          <cn cellml:units="first_order_rate_constant"> 2.41E0 </cn>
          <ci> W </ci>
        </apply>
      </apply>
        
      <apply id="k14_calculation">
        <eq/>
        <ci> k14 </ci>
        <apply>
          <times/>
          <cn cellml:units="first_order_rate_constant"> 2.41E0 </cn>
          <ci> W </ci>
        </apply>
      </apply>

      <apply id="k15_calculation">
        <eq/>
        <ci> k15 </ci>
        <apply>
          <times/>
          <cn cellml:units="first_order_rate_constant"> 4.8E-1 </cn>
          <ci> W </ci>
        </apply>
      </apply>
        
      <apply id="k16_calculation">
        <eq/>
        <ci> k16 </ci>
        <apply>
          <times/>
          <cn cellml:units="first_order_rate_constant"> 4.8E-1 </cn>
          <ci> W </ci>
        </apply>
      </apply>

      <apply id="k17_calculation">
        <eq/>
        <ci> k17 </ci>
        <apply>
          <times/>
          <cn cellml:units="first_order_rate_constant"> 2.41E0 </cn>
          <ci> W </ci>
        </apply>
      </apply>
        
      <apply id="k18_calculation">
        <eq/>
        <ci> k18 </ci>
        <apply>
          <times/>
          <cn cellml:units="first_order_rate_constant"> 2.41E0 </cn>
          <ci> W </ci>
        </apply>
      </apply>
    </math>
  </component>
  
  

  <connection>
    <map_components component_2="environment" component_1="E"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="EH"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="ENa"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="ENH4"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>

  <connection>
    <map_components component_2="environment" component_1="E_"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="EH_"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="ENa_"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
  
  <connection>
    <map_components component_2="environment" component_1="ENH4_"/>
    <map_variables variable_2="time" variable_1="time"/>
  </connection>
   
   <connection>
      <map_components component_2="ENa" component_1="E"/>
      <map_variables variable_2="E" variable_1="E"/>
      <map_variables variable_2="ENa" variable_1="ENa"/>
   </connection>
   
   <connection>
      <map_components component_2="EH" component_1="E"/>
      <map_variables variable_2="E" variable_1="E"/>
      <map_variables variable_2="EH" variable_1="EH"/>
   </connection>
   
   <connection>
      <map_components component_2="ENH4" component_1="E"/>
      <map_variables variable_2="E" variable_1="E"/>
      <map_variables variable_2="ENH4" variable_1="ENH4"/>
   </connection>

   <connection>
      <map_components component_2="ENa_" component_1="E_"/>
      <map_variables variable_2="E_" variable_1="E_"/>
      <map_variables variable_2="ENa_" variable_1="ENa_"/>
   </connection>
   
   <connection>
      <map_components component_2="EH_" component_1="E_"/>
      <map_variables variable_2="E_" variable_1="E_"/>
      <map_variables variable_2="EH_" variable_1="EH_"/>
   </connection>
   
   <connection>
      <map_components component_2="ENH4_" component_1="E_"/>
      <map_variables variable_2="E_" variable_1="E_"/>
      <map_variables variable_2="ENH4_" variable_1="ENH4_"/>
   </connection>
   
   <connection>
      <map_components component_2="ENa_" component_1="ENa"/>
      <map_variables variable_2="ENa" variable_1="ENa"/>
      <map_variables variable_2="ENa_" variable_1="ENa_"/>
   </connection>
   
   <connection>
      <map_components component_2="ENH4_" component_1="ENH4"/>
      <map_variables variable_2="ENH4" variable_1="ENH4"/>
      <map_variables variable_2="ENH4_" variable_1="ENH4_"/>
   </connection>
   
   <connection>
      <map_components component_2="EH" component_1="EH_"/>
      <map_variables variable_2="EH_" variable_1="EH_"/>
      <map_variables variable_2="EH" variable_1="EH"/>
   </connection>
   
   <connection>
      <map_components component_2="reaction_constants" component_1="E"/>
      <map_variables variable_2="H" variable_1="H"/>
      <map_variables variable_2="Na" variable_1="Na"/>
      <map_variables variable_2="NH4" variable_1="NH4"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k2" variable_1="k2"/>
      <map_variables variable_2="k3" variable_1="k3"/>
      <map_variables variable_2="k4" variable_1="k4"/>
      <map_variables variable_2="k5" variable_1="k5"/>
      <map_variables variable_2="k6" variable_1="k6"/>
   </connection>
   
   <connection>
      <map_components component_2="reaction_constants" component_1="ENa"/>
      <map_variables variable_2="Na" variable_1="Na"/>
      <map_variables variable_2="k1" variable_1="k1"/>
      <map_variables variable_2="k2" variable_1="k2"/>
      <map_variables variable_2="k13" variable_1="k13"/>
      <map_variables variable_2="k14" variable_1="k14"/>
   </connection>
   
   <connection>
      <map_components component_2="reaction_constants" component_1="EH"/>
      <map_variables variable_2="H" variable_1="H"/>
      <map_variables variable_2="k3" variable_1="k3"/>
      <map_variables variable_2="k4" variable_1="k4"/>
      <map_variables variable_2="k15" variable_1="k15"/>
      <map_variables variable_2="k16" variable_1="k16"/>
   </connection>
   
   <connection>
      <map_components component_2="reaction_constants" component_1="ENH4"/>
      <map_variables variable_2="NH4" variable_1="NH4"/>
      <map_variables variable_2="k5" variable_1="k5"/>
      <map_variables variable_2="k6" variable_1="k6"/>
      <map_variables variable_2="k17" variable_1="k17"/>
      <map_variables variable_2="k18" variable_1="k18"/>
   </connection>
   
   <connection>
      <map_components component_2="reaction_constants" component_1="E_"/>
      <map_variables variable_2="H_" variable_1="H_"/>
      <map_variables variable_2="Na_" variable_1="Na_"/>
      <map_variables variable_2="NH4_" variable_1="NH4_"/>
      <map_variables variable_2="k7" variable_1="k7"/>
      <map_variables variable_2="k8" variable_1="k8"/>
      <map_variables variable_2="k9" variable_1="k9"/>
      <map_variables variable_2="k10" variable_1="k10"/>
      <map_variables variable_2="k11" variable_1="k11"/>
      <map_variables variable_2="k12" variable_1="k12"/>
   </connection>
   
   <connection>
      <map_components component_2="reaction_constants" component_1="ENa_"/>
      <map_variables variable_2="Na_" variable_1="Na_"/>
      <map_variables variable_2="k7" variable_1="k7"/>
      <map_variables variable_2="k8" variable_1="k8"/>
      <map_variables variable_2="k13" variable_1="k13"/>
      <map_variables variable_2="k14" variable_1="k14"/>
   </connection>
   
   <connection>
      <map_components component_2="reaction_constants" component_1="EH_"/>
      <map_variables variable_2="H_" variable_1="H_"/>
      <map_variables variable_2="k9" variable_1="k9"/>
      <map_variables variable_2="k10" variable_1="k10"/>
      <map_variables variable_2="k15" variable_1="k15"/>
      <map_variables variable_2="k16" variable_1="k16"/>
   </connection>
   
   <connection>
      <map_components component_2="reaction_constants" component_1="ENH4_"/>
      <map_variables variable_2="NH4_" variable_1="NH4_"/>
      <map_variables variable_2="k11" variable_1="k11"/>
      <map_variables variable_2="k12" variable_1="k12"/>
      <map_variables variable_2="k17" variable_1="k17"/>
      <map_variables variable_2="k18" variable_1="k18"/>
   </connection>



<rdf:RDF>
  <rdf:Bag rdf:about="rdf:#00bd7c0f-3476-4f25-88ff-61110140bbfc">
    <rdf:li>kidney</rdf:li>
    <rdf:li>electrophysiology</rdf:li>
  </rdf:Bag>
  <rdf:Seq rdf:about="rdf:#5a0b7de5-a9ca-4aae-a11e-d848e612f664">
    <rdf:li rdf:resource="rdf:#52ecc62c-c5b6-4a47-8627-8740d306b58e"/>
    <rdf:li rdf:resource="rdf:#fcb65096-9399-4d9e-bd6d-be786905bfe2"/>
  </rdf:Seq>
  <rdf:Description rdf:about="">
    <dc:publisher>The University of Auckland, Bioengineering Institute</dc:publisher>
    <cmeta:comment rdf:resource="rdf:#e0ea69c6-6712-4bca-a881-471727e261d2"/>
    <dcterms:created rdf:resource="rdf:#cfbfe70b-94c6-4ff6-90ce-24a365c76f3c"/>
    <dc:creator rdf:resource="rdf:#d972ba24-aeb8-4e54-ab7e-b0a01663fe8f"/>
    <cmeta:modification rdf:resource="rdf:#602f558e-46f5-4096-9f65-bdb5c6eb0c9f"/>
  </rdf:Description>
  <rdf:Description rdf:about="/E">
    <dcterms:alternative>Na-H exchanger extracellular side</dcterms:alternative>
    <dc:title>E</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="/E_">
    <dcterms:alternative>Na-H exchanger intracellular side</dcterms:alternative>
    <dc:title>E_</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cee9091a-6905-4f83-bdb5-712d8b17e21d">
    <vCard:FN/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#e0ea69c6-6712-4bca-a881-471727e261d2">
    <dc:creator rdf:resource="rdf:#cee9091a-6905-4f83-bdb5-712d8b17e21d"/>
    <rdf:value/>
  </rdf:Description>
  <rdf:Description rdf:about="/EH">
    <dcterms:alternative>H+-loaded Na-H exchanger extracellular side</dcterms:alternative>
    <dc:title>EH</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="/ENH4_">
    <dcterms:alternative>NH4+-loaded Na-H exchanger intracellular side</dcterms:alternative>
    <dc:title>ENH4_</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b24d0279-4329-44df-8dcd-599ed73638af">
    <rdf:type rdf:resource="http://imc.org/vCard/3.0#internet"/>
    <rdf:value>c.lloyd@auckland.ac.nz</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#52ecc62c-c5b6-4a47-8627-8740d306b58e">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#2cf7e7ed-c041-425e-9f89-8cc63585dbec"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#112846f4-4c3f-4d0b-b482-5e05038f1070">
    <bqs:subject_type>keyword</bqs:subject_type>
    <rdf:value rdf:resource="rdf:#00bd7c0f-3476-4f25-88ff-61110140bbfc"/>
  </rdf:Description>
  <rdf:Description rdf:about="#renal_Na_H_exchanger_model_version02">
    <dc:title>
        Chang and Fujita's 2001 mathematical model of a Na-H exchanger in the 
        distal tubule of the rat: it is one component of an overall model of 
        acid/base transport in a distal tubule.
      </dc:title>
    <cmeta:bio_entity>Renal Distal Tubule</cmeta:bio_entity>
    <cmeta:comment rdf:resource="rdf:#b2310a11-e3e3-4510-a11a-14229a39c2b7"/>
    <bqs:reference rdf:resource="rdf:#0707c93a-4c84-4871-886b-3b0e73f27980"/>
    <bqs:reference rdf:resource="rdf:#5feb5fee-7383-4071-ba10-9fa1817a966f"/>
    <cmeta:species>Rat</cmeta:species>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#77ad8db2-16fb-41f2-b538-54feab27238c">
    <vCard:Orgname>The University of Auckland</vCard:Orgname>
    <vCard:Orgunit>The Bioengineering Institute</vCard:Orgunit>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#602f558e-46f5-4096-9f65-bdb5c6eb0c9f">
    <dcterms:modified rdf:resource="rdf:#11cfac2b-9949-4717-8f0f-10e9ba2cd477"/>
    <rdf:value>The new version of this model has been re-coded to remove the reaction element and replace it with a simple MathML description of the model reaction kinetics. This is thought to be truer to the original publication, and information regarding the enzyme kinetics etc will later be added to the metadata through use of an ontology. &#13;
&#13;
The model runs in the PCEnv simulator but gives a flat output.</rdf:value>
    <cmeta:modifier rdf:resource="rdf:#453824b4-642c-478d-b126-eb737f90bc24"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#45dfaeee-9838-4c90-b83a-9ddbadfcd167">
    <vCard:FN>Catherine Lloyd</vCard:FN>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#453824b4-642c-478d-b126-eb737f90bc24">
    <vCard:N rdf:resource="rdf:#0902d3a8-91f5-42f7-90bc-98d56b27f39f"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#11cfac2b-9949-4717-8f0f-10e9ba2cd477">
    <dcterms:W3CDTF>2007-06-05T09:57:38+12:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#3d9715a3-da2b-49e7-8043-c0214663397a">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#fcb65096-9399-4d9e-bd6d-be786905bfe2">
    <rdf:type rdf:resource="http://www.cellml.org/bqs/1.0#Person"/>
    <vCard:N rdf:resource="rdf:#a3fea948-d79b-440e-806f-dad6f0c40019"/>
  </rdf:Description>
  <rdf:Description rdf:about="/ENa_">
    <dcterms:alternative>sodium-loaded Na-H exchanger intracellular side</dcterms:alternative>
    <dc:title>ENa_</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5feb5fee-7383-4071-ba10-9fa1817a966f">
    <dc:subject rdf:resource="rdf:#112846f4-4c3f-4d0b-b482-5e05038f1070"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#d972ba24-aeb8-4e54-ab7e-b0a01663fe8f">
    <vCard:ORG rdf:resource="rdf:#77ad8db2-16fb-41f2-b538-54feab27238c"/>
    <vCard:EMAIL rdf:resource="rdf:#b24d0279-4329-44df-8dcd-599ed73638af"/>
    <vCard:N rdf:resource="rdf:#3d9715a3-da2b-49e7-8043-c0214663397a"/>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#5e840a12-165d-452b-929b-944586f70ebf">
    <dc:creator rdf:resource="rdf:#5a0b7de5-a9ca-4aae-a11e-d848e612f664"/>
    <dc:title>A numerical model of acid-base transport in rat distal tubule</dc:title>
    <bqs:volume>281</bqs:volume>
    <bqs:first_page>F222</bqs:first_page>
    <bqs:Journal rdf:resource="rdf:#28fc22ec-e4e2-4d62-b4e5-5e08339dc14e"/>
    <dcterms:issued rdf:resource="rdf:#06fd03db-ff9e-4750-9aac-9d2b61b8457e"/>
    <bqs:last_page>F243</bqs:last_page>
  </rdf:Description>
  <rdf:Description rdf:about="/EH_">
    <dcterms:alternative>H+-loaded Na-H exchanger intracellular side</dcterms:alternative>
    <dc:title>EH_</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="/ENa">
    <dcterms:alternative>sodium-loaded Na-H exchanger extracellular side</dcterms:alternative>
    <dc:title>ENa</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#28fc22ec-e4e2-4d62-b4e5-5e08339dc14e">
    <dc:title>American Journal of Physiology</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#cfbfe70b-94c6-4ff6-90ce-24a365c76f3c">
    <dcterms:W3CDTF>2007-05-29T00:00:00+00:00</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0707c93a-4c84-4871-886b-3b0e73f27980">
    <bqs:Pubmed_id>11457714</bqs:Pubmed_id>
    <bqs:JournalArticle rdf:resource="rdf:#5e840a12-165d-452b-929b-944586f70ebf"/>
  </rdf:Description>
  <rdf:Description rdf:about="/ENH4">
    <dcterms:alternative>NH4+-loaded Na-H exchanger extracellular side</dcterms:alternative>
    <dc:title>ENH4</dc:title>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#0902d3a8-91f5-42f7-90bc-98d56b27f39f">
    <vCard:Given>Catherine</vCard:Given>
    <vCard:Family>Lloyd</vCard:Family>
    <vCard:Other>May</vCard:Other>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#b2310a11-e3e3-4510-a11a-14229a39c2b7">
    <dc:creator rdf:resource="rdf:#45dfaeee-9838-4c90-b83a-9ddbadfcd167"/>
    <rdf:value>This is the CellML description of Chang and Fujita's 2001 mathematical model of a Na-H exchanger in the distal tubule of the rat: it is one component of an overall model of acid/base transport in a distal tubule.</rdf:value>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#a3fea948-d79b-440e-806f-dad6f0c40019">
    <vCard:Given>Toshiro</vCard:Given>
    <vCard:Family>Fujita</vCard:Family>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#06fd03db-ff9e-4750-9aac-9d2b61b8457e">
    <dcterms:W3CDTF>2001-08</dcterms:W3CDTF>
  </rdf:Description>
  <rdf:Description rdf:about="rdf:#2cf7e7ed-c041-425e-9f89-8cc63585dbec">
    <vCard:Given>Hangil</vCard:Given>
    <vCard:Family>Chang</vCard:Family>
  </rdf:Description>
</rdf:RDF>
</model>